# ---------------------------------------
# Patient
# ---------------------------------------

###  Generate materials from Hounsfield units
/gate/HounsfieldMaterialGenerator/SetMaterialTable                  data/Schneider2000MaterialsTable.txt
/gate/HounsfieldMaterialGenerator/SetDensityTable                   data/Schneider2000DensitiesTable.txt
/gate/HounsfieldMaterialGenerator/SetDensityTolerance               0.1 g/cm3
/gate/HounsfieldMaterialGenerator/SetOutputMaterialDatabaseFilename data/patient-HUmaterials.db
/gate/HounsfieldMaterialGenerator/SetOutputHUMaterialFilename       data/patient-HU2mat.txt
/gate/HounsfieldMaterialGenerator/Generate

###  Insert image

/gate/world/daughters/name                      patient
/gate/world/daughters/insert                    ImageNestedParametrisedVolume
#/gate/world/daughters/insert                    ImageRegionalizedVolume

/gate/geometry/setMaterialDatabase              data/patient-HUmaterials.db
/gate/patient/geometry/setHUToMaterialFile      data/patient-HU2mat.txt
/gate/patient/geometry/setImage                 data/patient-4mm.mhd

# If "ImageRegionalizedVolume" is used instead of "ImageNestedParametrisedVolume"
# You should compute (at least once the dmap image) with "buildAndDumpDistanceTransfo"
# and used it with "distanceMap"
# With photon simulation, ImageRegionalizedVolume is faster than ImageNestedParametrisedVolume
#/gate/patient/geometry/buildAndDumpDistanceTransfo   data/patient-4mm-dmap.mhd
#/gate/patient/geometry/distanceMap                   data/patient-4mm-dmap.mhd

### optional : dump used image (with labels)
#/gate/patient/geometry/buildAndDumpLabeledImage  data/patient-labeled.mhd

### Put the following image point at center
#/gate/patient/geometry/setOrigin                         -293 -223 -246 mm
#/gate/patient/geometry/TranslateTheImageAtThisIsoCenter  5.2 69.5 -18.0 mm

### rotate the patient
/gate/patient/placement/setRotationAxis 1 0 0
/gate/patient/placement/setRotationAngle -90 deg

### debug only
#/gate/patient/geometry/enableBoundingBoxOnly true
